CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Treatment>.*)--(?P<Batch>.*)--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<DataFolder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "C01.ome.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C02.ome.tif")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:NucleiTmp
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.01
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
IdentifySecondaryObjects:[module_num:6|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notes:['Region growing to find the cells']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
    Select the input objects:NucleiTmp
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:GFP
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.0042
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
Morph:[module_num:7|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notes:['Tophat filter to only have the fluorescence from the small structures']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
    Select the input image:GFP
    Name the output image:GFPTH
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:3
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ImageMath:[module_num:8|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notes:['Background subtraction']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.0029
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFPBGC
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureObjectIntensity:[module_num:9|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notes:['Intensity measurements']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
    Hidden:2
    Select an image to measure:GFPTH
    Select an image to measure:GFPBGC
    Select objects to measure:Cells

CalculateMath:[module_num:10|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
    Name the output measurement:Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Intensity_IntegratedIntensity_GFPTH
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_IntegratedIntensity_GFPBGC
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<DataFolder>--cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Count_Cells,Image|FileName_DNA,Image|Metadata_Batch,Image|Metadata_Treatment,Image|Metadata_DataFolder,Cells|Intensity_IntegratedIntensity_GFPBGC,Cells|Math_Ratio
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
