CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Treatment>.*)--(?P<Batch>.*)--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<DataFolder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "C01.ome.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C02.ome.tif")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:NucleiTmp
    Typical diameter of objects, in pixel units (Min,Max):30,600
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ImageMath:[module_num:6|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notes:['Background subtraction']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.003
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFPBGC
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:7|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notes:['Smoothing for cell identification']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
    Select the input image:GFPBGC
    Name the output image:GFPBGCsmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:30
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
IdentifySecondaryObjects:[module_num:8|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notes:['Region growing to find the cells']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
    Select the input objects:NucleiTmp
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:GFPBGCsmooth
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    Name the outline image:CellsOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.0005
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
Morph:[module_num:9|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notes:['Tophat filter to enhance small structures']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
    Select the input image:GFP
    Name the output image:GFPTH
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Diameter:5
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MeasureObjectIntensity:[module_num:10|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notes:['Intensity measurements']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
    Hidden:1
    Select an image to measure:GFPBGC
    Select objects to measure:Cells

DisplayDataOnImage:[module_num:11|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notes:['Show the intensity values on the image']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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Intensity_IntegratedIntensity_GFPBGC
    Select the image on which to display the measurements:GFPBGC
    Text color:#95FF4A
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:12|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notes:['Filter cell with little GFP expression']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
    Name the output objects:BrightCells
    Select the object to filter:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_IntegratedIntensity_GFPBGC
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:13|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notes:['Segment the dot-like structures']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
    Select the input image:GFPTH
    Name the primary objects to be identified:AutoPhagosomes
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0,1.0
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    Masking objects:BrightCells
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    Use default parameters?:Default
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Nuclei
    Name the output image:NucleiBinary
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:15|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notes:['Autophagosome Location Measurement']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:1
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucleiBinaryInverted
    Image or measurement?:Image
    Select the first image:NucleiBinary
    Multiply the first image by:-1.0
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    Image or measurement?:Image
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
Morph:[module_num:16|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notes:['Autophagosome Location Measurement']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
    Select the input image:NucleiBinaryInverted
    Name the output image:NucleiDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
    Rescale values from 0 to 1?:No

ImageMath:[module_num:17|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notes:['Autophagosome Location Measurement']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:1.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:CellsOutlinesInverted
    Image or measurement?:Image
    Select the first image:CellsOutlines
    Multiply the first image by:-1.0
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    Image or measurement?:Image
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
Morph:[module_num:18|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notes:['Autophagosome Location Measurement']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
    Select the input image:CellsOutlinesInverted
    Name the output image:CellsOutlinesDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
    Rescale values from 0 to 1?:No

MeasureObjectIntensity:[module_num:19|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notes:['Measure intensities ']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
    Hidden:4
    Select an image to measure:GFPBGC
    Select an image to measure:GFPTH
    Select an image to measure:NucleiDistance
    Select an image to measure:CellsOutlinesDistance
    Select objects to measure:BrightCells
    Select objects to measure:AutoPhagosomes

RescaleIntensity:[module_num:20|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
    Select the input image:GFP
    Name the output image:GFPRS
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.02
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFPRS
    Name the output image:GFPOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#7EFF34
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

DisplayDataOnImage:[module_num:22|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
    Display object or image measurements?:Object
    Select the input objects:AutoPhagosomes
    Measurement to display:Intensity_MeanIntensity_CellsOutlinesDistance
    Select the image on which to display the measurements:GFPOverlay
    Text color:#A0FF47
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
CalculateMath:[module_num:23|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
    Name the output measurement:RelativeTotalIntensityInAutoPhagosomes
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:BrightCells
    Select the numerator measurement:Intensity_IntegratedIntensity_GFPTH
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:BrightCells
    Select the denominator measurement:Intensity_IntegratedIntensity_GFPBGC
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RelateObjects:[module_num:24|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
    Select the input child objects:AutoPhagosomes
    Select the input parent objects:BrightCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
CalculateMath:[module_num:25|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
    Name the output measurement:RelativeIntensityPerAutoPhagosome
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:BrightCells
    Select the numerator measurement:Mean_AutoPhagosomes_Intensity_IntegratedIntensity_GFPTH
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:BrightCells
    Select the denominator measurement:Intensity_IntegratedIntensity_GFPBGC
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RescaleIntensity:[module_num:26|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notes:['Generate output image with segmentation overlay']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
    Select the input image:GFP
    Name the output image:GFPRS
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:27|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notes:['Generate output image with segmentation overlay']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFPRS
    Name the output image:GFPOverlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:#FBF8FF
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:AutoPhagosomes

SaveImages:[module_num:28|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notes:['Generate output image with segmentation overlay']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
    Select the type of image to save:Image
    Select the image to save:GFPOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--cp
    Saved file format:jpeg
    Output file location:Elsewhere...|\\\\g<DataFolder>--cellprofiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|\\\\g<DataFolder>--cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_Cells,Image|FileName_DNA,Image|Metadata_Batch,Image|Metadata_Treatment,Image|Metadata_DataFolder,BrightCells|Children_AutoPhagosomes_Count,BrightCells|Math_RelativeIntensityPerAutoPhagosome,BrightCells|Math_RelativeTotalIntensityInAutoPhagosomes
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:BrightCells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
