CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Treatment>.*)--(?P<Batch>.*)--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<DataFolder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "C01.ome.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C02.ome.tif")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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notes:['Background subtraction on whole image']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.003
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFPbgc
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:6|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
    Select the input image:GFPbgc
    Name the output image:GFPunbound
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:15
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
ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFPbound
    Image or measurement?:Image
    Select the first image:GFPbgc
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GFPunbound
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DNA
    Name the primary objects to be identified:NucleiTmp
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.01
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
IdentifySecondaryObjects:[module_num:9|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notes:['Region growing to find the cells']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
    Select the input objects:NucleiTmp
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:GFPbgc
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.0001
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:GFPbgc
    Select objects to measure:Cells

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Intensity_IntegratedIntensity_GFPbgc
    Select the image on which to display the measurements:GFPbgc
    Text color:yellow
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:12|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
    Name the output objects:CellsExpressingEnough
    Select the object to filter:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_IntegratedIntensity_GFPbgc
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:2
    Select an image to measure:GFPbgc
    Select an image to measure:GFPbound
    Select objects to measure:CellsExpressingEnough

CalculateMath:[module_num:14|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
    Name the output measurement:PercentBound
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CellsExpressingEnough
    Select the numerator measurement:Intensity_IntegratedIntensity_GFPbound
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:CellsExpressingEnough
    Select the denominator measurement:Intensity_IntegratedIntensity_GFPbgc
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RescaleIntensity:[module_num:15|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
    Select the input image:GFPbgc
    Name the output image:GFPrescaled
    Rescaling method:Stretch each image to use the full intensity range
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
DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:CellsExpressingEnough
    Measurement to display:Math_PercentBound
    Select the image on which to display the measurements:GFPrescaled
    Text color:yellow
    Name the output image that has the measurements displayed:FractionBound
    Font size (points):10
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:FractionBound
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--PercentBound
    Saved file format:tif
    Output file location:Elsewhere...|\\\\g<DataFolder>--cellprofiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<DataFolder>--cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_CellsExpressingEnough,Image|Count_Cells,Image|FileName_GFP,Image|FileName_DNA,Image|Metadata_Batch,Image|Metadata_Treatment,Image|Metadata_DataFolder,CellsExpressingEnough|Intensity_IntegratedIntensity_GFPbgc,CellsExpressingEnough|Intensity_IntegratedIntensity_GFPbound,CellsExpressingEnough|Math_PercentBound
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CellsExpressingEnough
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
